PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1470, 956]
  expName = GVMT
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Glasgow Voice Memory Test

        Your task is to listen to a series of eight voices and try to remember them.
        This will be followed by another series of voices that will test your memory. For each one of those new voices, you will have to indicate if it belongs to the first series you have been trying to remember.
        This will be repeated for ringing bells.
    ButtonComponent int_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = NEXT
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  Routine sound_test
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    TextComponent st_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Let's first check if your sound device works properly

        A sound will be played after you click the button below. You can replay the sound as many times as you wish

        Please adjust the volume of your device at a comfortable level.
    ButtonComponent st_play_btn
      bold = True
      callback = st_play_once = True
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0, -0.25)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Test Sound
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    ButtonComponent st_cont_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [condition] = st_play_once
      text = Continue
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    SoundComponent st_sound
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/FemaleAverage.wav
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        st_play_once = False
        st_soundPlaying = False
      Each Frame:
        if st_play_btn.wasClicked and not st_soundPlaying:
            st_sound.play()
            st_soundPlaying = True
            st_playStart = t

        if st_soundPlaying:
            if t - st_playStart >= st_sound.getDuration():
                st_soundPlaying = False
  Routine voice_task
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    TextComponent vt_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is this Voice OLD or NEW?

        Press 'z' for OLD
        Press 'm' for NEW"
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize counters
        totalTrials = 0
        totalCorrect = 0
      Begin Routine:
        respKey = None
        respCorrect = None
      End Routine:
        # Check response from Keyboard component
        if vt_key.keys:  # participant pressed a key
            respKey = vt_key.keys[0]  # first key pressed
            if (respKey == 'z' and vt_type == 'old') or (respKey == 'm' and vt_type == 'new'):
                respCorrect = 1
            else:
                respCorrect = 0

        # Update counters
        totalTrials += 1
        if respCorrect == 1:
            totalCorrect += 1
    SoundComponent vt_sound
      sound [set every repeat] = $vt_soundfile
      startVal [time (s)] = 0.1
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    KeyboardComponent vt_key
      allowedKeys = 'z', 'm'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 1
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  Routine voice_feedback
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    TextComponent vf_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        accuracy_percent = (totalCorrect / totalTrials) * 100
        vf_text.text = f"Your accuracy for the faces was {accuracy_percent:.1f}%\nAs an indication, the general population accuracy for this type of sound is 78.8 %\n\nClick 'Next' to continue"
    ButtonComponent vf_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine bells_instructions
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  Routine bells_feedback
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    TextComponent bf_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        accuracy_percent = (totalCorrect / totalTrials) * 100
        bf_text.text = f"Your accuracy for the bells was {accuracy_percent:.1f}%\nAs an indication, the general population accuracy for this type of sound is 78.8 %\n\nClick 'Next' to continue"
    ButtonComponent bf_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine finish
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    TextComponent fin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of experiment

        The experiment is over, thank you for your participation!
    ButtonComponent fin_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Finish
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  Routine voice_memorisation
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    TextComponent vm_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        vm_text.text = vm_text_content
        vm_btn.text = vm_btn_content

        if auto_proceed == 1:
            vm_text.draw()
            win.flip()
            continueRoutine = False

        if vm_playSound == 1:
            for _ in range(3):
                vm_sound_1.play()
                core.wait(vm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                vm_sound_2.play()
                core.wait(vm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                vm_sound_3.play()
                core.wait(vm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                vm_sound_4.play()
                core.wait(vm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                vm_sound_5.play()
                core.wait(vm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                vm_sound_6.play()
                core.wait(vm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                vm_sound_7.play()
                core.wait(vm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                vm_sound_8.play()
                core.wait(vm_sound_1.getDuration() + 0.1)
            continueRoutine = False
    ButtonComponent vm_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
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    SoundComponent vm_sound_1
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID01.wav
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    SoundComponent vm_sound_2
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID02.wav
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    SoundComponent vm_sound_3
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID03.wav
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    SoundComponent vm_sound_4
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID04.wav
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    SoundComponent vm_sound_5
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID05.wav
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    SoundComponent vm_sound_6
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID06.wav
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    SoundComponent vm_sound_7
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID07.wav
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    SoundComponent vm_sound_8
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID08.wav
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  Routine voice_task_intro
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    TextComponent vti_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Testing instruction

        During the testing phase, you will listen to "Voice" sounds that are either OLD (sounds that were presented during the familiarization phase) or NEW (sounds that were presented NOT during the familiarization phase).

        After the playback of a sound press:
        - Press 'z' if you think this was an OLD sound
        - Press 'm' if you think this was a NEW sound
    ButtonComponent vti_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine voice_task_load
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    TextComponent vtl_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Loading...
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  Routine bells_memorisation
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    TextComponent bm_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        bm_text.text = bm_text_content
        bm_btn.text = bm_btn_content

        if auto_proceed == 1:
            bm_text.draw()
            win.flip()
            continueRoutine = False

        if bm_playSound == 1:
            for _ in range(3):
                bm_sound_1.play()
                core.wait(bm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                bm_sound_2.play()
                core.wait(bm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                bm_sound_3.play()
                core.wait(bm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                bm_sound_4.play()
                core.wait(bm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                bm_sound_5.play()
                core.wait(bm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                bm_sound_6.play()
                core.wait(bm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                bm_sound_7.play()
                core.wait(vm_sound_1.getDuration() + 0.1)
            for _ in range(3):
                vm_sound_8.play()
                core.wait(bm_sound_1.getDuration() + 0.1)
            continueRoutine = False
    ButtonComponent bm_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
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    SoundComponent bm_sound_1
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID01.wav
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    SoundComponent bm_sound_2
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID02.wav
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    SoundComponent bm_sound_3
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID03.wav
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    SoundComponent bm_sound_4
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID04.wav
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    SoundComponent bm_sound_5
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID05.wav
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    SoundComponent bm_sound_6
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID06.wav
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    SoundComponent bm_sound_7
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID07.wav
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    SoundComponent bm_sound_8
      sound [set every repeat] = Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID08.wav
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  Routine bells_task_intro
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    TextComponent bti_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Testing instruction

        During the testing phase, you will listen to "Bell" sounds that are either OLD (sounds that were presented during the familiarization phase) or NEW (sounds that were presented NOT during the familiarization phase).

        After the playback of a sound press:
        - Press 'z' if you think this was an OLD sound
        - Press 'm' if you think this was a NEW sound
    ButtonComponent bti_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.25, 0.1)
      startVal [time (s)] = 0
      text = Next
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  Routine bells_task_load
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    TextComponent btl_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Loading...
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  Routine bells_task
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    TextComponent bt_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Is this Bell OLD or NEW?

        Press 'z' for OLD
        Press 'm' for NEW"
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize counters
        totalTrials = 0
        totalCorrect = 0
      Begin Routine:
        respKey = None
        respCorrect = None
      End Routine:
        # Check response from Keyboard component
        if bt_key.keys:  # participant pressed a key
            respKey = bt_key.keys[0]  # first key pressed
            if (respKey == 'z' and bt_type == 'old') or (respKey == 'm' and bt_type == 'new'):
                respCorrect = 1
            else:
                respCorrect = 0

        # Update counters
        totalTrials += 1
        if respCorrect == 1:
            totalCorrect += 1
    SoundComponent bt_sound
      sound [set every repeat] = $bt_soundfile
      startVal [time (s)] = 0.1
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    KeyboardComponent bt_key
      allowedKeys = 'z', 'm'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 1
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Flow
  Routine introduction
  Routine sound_test
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/vm_cond_file.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('vm_text_content', '"Voice" Memorization\n\nDuring the memorization phase, you will listen to "Voice" sounds.\n\nListen carefully because, during the test phase, you will be asked whether you heard those sounds or not.'), ('vm_btn_content', 'Start'), ('vm_playSound', 0), ('vm_btn_present', 1), ('auto_proceed', 0)]),
      OrderedDict([('vm_text_content', 'Listen carefully to the sounds'), ('vm_btn_content', 'placeholder'), ('vm_playSound', 0), ('vm_btn_present', 0), ('auto_proceed', 1)]),
      OrderedDict([('vm_text_content', 'Listen carefully to the sounds'), ('vm_btn_content', 'placeholder'), ('vm_playSound', 1), ('vm_btn_present', 0), ('auto_proceed', 0)]),
      OrderedDict([('vm_text_content', "End of memorization phase!\n\nClick 'Next' to continue"), ('vm_btn_content', 'Next'), ('vm_playSound', 0), ('vm_btn_present', 1), ('auto_proceed', 0)])]
    Routine voice_memorisation
  LoopTerminator trials
  Routine voice_task_intro
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions/vt_cond_file.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID04.wav')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID01.wav')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID02.wav')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID08.wav')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID05.wav')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID03.wav')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID01.wav')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID04.wav')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID05.wav')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_New_ID06.wav')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID06.wav')]),
      OrderedDict([('vt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Voice_Old_ID03.wav')])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
    Routine voice_task_load
    Routine voice_task
  LoopTerminator trials_2
  Routine voice_feedback
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditions/bm_cond_file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'vm_text_content': 'Testing instruction\nDuring the testing phase, you will listen to "Bell" sounds that are either OLD (sounds that were presented during the familiarization phase) or NEW (sounds that were presented NOT during the familiarization phase).\nAfter the playback of a sound press:\n- Click left if you think this was an OLD sound\n- Click right if you think this was a NEW sound', 'vm_btn_content': 'Start', 'vm_playSound': 0},
      {'vm_text_content': 'Listen carefully to the sounds', 'vm_btn_content': 'placeholder', 'vm_playSound': 1},
      {'vm_text_content': "End of memorization phase!\n\nClick 'Next' to continue", 'vm_btn_content': 'Next', 'vm_playSound': 0},
      {'vm_text_content': None, 'vm_btn_content': None, 'vm_playSound': None},
      {'vm_text_content': None, 'vm_btn_content': None, 'vm_playSound': None},
      {'vm_text_content': None, 'vm_btn_content': None, 'vm_playSound': None},
      {'vm_text_content': None, 'vm_btn_content': None, 'vm_playSound': None},
      {'vm_text_content': None, 'vm_btn_content': None, 'vm_playSound': None},
      {'vm_text_content': None, 'vm_btn_content': None, 'vm_playSound': None},
      {'vm_text_content': None, 'vm_btn_content': None, 'vm_playSound': None},
      {'vm_text_content': None, 'vm_btn_content': None, 'vm_playSound': None}]
    Routine bells_memorisation
  LoopTerminator trials_3
  Routine bells_task_intro
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = conditions/bt_cond_file.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID01.wav'), ('bt_type', 'new')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID06.wav'), ('bt_type', 'old')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID02.wav'), ('bt_type', 'new')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID05.wav'), ('bt_type', 'old')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID03.wav'), ('bt_type', 'new')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID04.wav'), ('bt_type', 'new')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID03.wav'), ('bt_type', 'old')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID01.wav'), ('bt_type', 'old')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_Old_ID08.wav'), ('bt_type', 'old')]),
      OrderedDict([('bt_soundfile', 'Sounds_Resampled-44100Hz_Normalized-100-percent-window_Adjusted-66150/Bell_New_ID05.wav'), ('bt_type', 'new')])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
    Routine bells_task_load
    Routine bells_task
  LoopTerminator trials_4
  Routine bells_feedback
  Routine finish
